---
API: 2.1
OpenSesame: 3.3.8
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title internship_experiment
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 24
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/Maaik/Documents/1. Master Neuroscience and Cognition/Stage/Programming platforms/Open Sesame"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background "#d0d0d0"

define loop baseline_block_loop
	set source table
	set repeat 2
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 stimuli att_grabber
	setcycle 0 target_pos -400
	setcycle 1 stimuli att_grabber
	setcycle 1 target_pos 400
	run baseline_trial_sequence

define sequence baseline_block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run reset_feedback always
	run baseline_block_loop always

define loop baseline_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 baseline yes
	setcycle 0 paired_succession no
	setcycle 0 preferential_looking no
	run baseline_block_sequence

define sketchpad baseline_stim
	set duration 1950
	set description "Displays stimuli"
	draw image center=1 file="test_stim_attention.png" scale=0.30000000000000016 show_if=always x="[target_pos].0" y=0 z_index=0

define sequence baseline_trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run sound always
	run baseline_stim always
	run log_data always

define form_text_display end_of_experiment
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Einde
	set margins "50;50;50;50"
	set form_title Einde
	__form_text__
	Bedankt voor uw deelname!
	Druk op "einde" om af te sluiten
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instructions always
	run baseline_loop always
	run white_synchronization_aftereffect_screen always
	run paired_succession_loop always
	run white_synchronization_aftereffect_screen always
	run preferential_looking_loop always
	run white_screen_end always
	run end_of_experiment always

define form_text_display instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Start
	set margins "50;50;50;50"
	set form_title Instruction
	__form_text__
	Als de baby op de juiste positie zit, waarbij het hoofd mooi in het midden van het scherm zit,druk dan op "start"
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define logger log_data
	set description "Logs experimental data"
	set auto_log yes

define sequence paired_succession_block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run reset_feedback always
	run ps_block_loop always

define loop paired_succession_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 baseline no
	setcycle 0 paired_succession yes
	setcycle 0 preferential_looking no
	run paired_succession_block_sequence

define loop pl_block_loop
	set source table
	set repeat 2
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 stimuli simple
	setcycle 1 stimuli complex
	run pl_trail_sequence

define sampler pl_sound
	set volume 1
	set stop_after 0
	set sample "example_sound.ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad pl_stim
	set duration 9950
	set description "Displays stimuli"
	draw image center=1 file="test_stim_[stimuli].png" scale=0.30000000000000016 show_if=always x=-400 y=0 z_index=0
	draw image center=1 file="test_stim_[stimuli].png" scale=0.30000000000000016 show_if=always x=400 y=0 z_index=0

define sequence pl_trail_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run pl_sound always
	run pl_stim always
	run log_data always

define sequence preferential_looking_block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run reset_feedback always
	run pl_block_loop always

define loop preferential_looking_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 beseline no
	setcycle 0 paired_succession no
	setcycle 0 preferential_looking yes
	run preferential_looking_block_sequence

define loop ps_block_loop
	set source_file ""
	set source table
	set repeat 2
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 stimuli simple
	setcycle 0 target_pos -400
	setcycle 1 stimuli simple
	setcycle 1 target_pos 400
	setcycle 2 stimuli complex
	setcycle 2 target_pos -400
	setcycle 3 stimuli complex
	setcycle 3 target_pos 400
	run ps_trial_sequence

define sampler ps_sound
	set volume 1
	set stop_after 0
	set sample "example_sound.ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad ps_stim
	set duration 9950
	set description "Displays stimuli"
	draw image center=1 file="test_stim_[stimuli].png" scale=0.30000000000000016 show_if=always x="[target_pos]" y=0 z_index=0

define sequence ps_trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run ps_sound always
	run ps_stim always
	run log_data always

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sampler sound
	set volume 1
	set stop_after 0
	set sample "example_sound.ogg"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration 0
	set description "Plays a sound file in .wav or .ogg format"

define sketchpad white_screen_end
	set duration 300
	set description "Displays stimuli"
	draw rect color="#ffffff" fill=1 h=768 penwidth=1 show_if=always w=1024 x=-512 y=-384 z_index=0

define sketchpad white_synchronization_aftereffect_screen
	set duration 550
	set description "Displays stimuli"
	draw rect color="#ffffff" fill=1 h=768 penwidth=1 show_if=always w=1024 x=-512 y=-384 z_index=0

